/**
 * This is the original Miocinovic 2006 morphology implemented as a
 * template so the cell definition is isolated from the global scope.
 *
 * @author      Lucas Koelman
 * @date        19/12/2018
 */

load_file("stdlib.hoc")
load_file("stdrun.hoc")

/**
 * Properly encapsulated version of STN cell that doesn't pollute global
 * namespace.
 */
begintemplate STN_morph_type1RD
// template starts new namespace that is encapsulated/isolated
// Declare public members using 'public <varname>'
// Cannot initialize variables outside funcitons, except 'create <secname>'

// Section variables
public soma
// dummy vars: NEURON error if not created here
create soma[1], dend[1], initseg[1]
create node[1], MYSA[1], FLUT[1], STIN[1]

// NOTE: objref are public by default
// NOTE: 'this' is reserved keyword and refers to the instantiated object
objref this

// Named Sectionlists according to interface BluePyOpt.Ephys & Morphology Importer
objref all, somatic, basal, apical, axonal, myelinated, nodal

// Other public variables
public v_init, cai0, cao0, nai0, nao0, ki0, ko0, with_extracellular
objref fih_ions, fih_states // FInitializeHandlers for ions

/**
 * Cell constructor.
 */
proc init() {

    // Parse arguments
    with_extracellular = $1

    // Initialize sectionlists rquired by Morphology Importer & BluePyOpt interface
    all = new SectionList()
    somatic = new SectionList()
    basal = new SectionList()
    apical = new SectionList()
    axonal = new SectionList()
    myelinated = new SectionList()
    nodal = new SectionList() // not part of interface

    set_indep_params()
    set_dependent_params()
    create_sections()
    connect_sections()
    add_3d_coordinates()
    set_conductances()

    fih_ions = new FInitializeHandler(1, "init_ions()", this)
    fih_states = new FInitializeHandler(1, "init_states()", this)
}

/**
 * Set initial ion concentrations
 */
proc init_ions() {
    forsec somatic {
        cai0_Cacum = this.cai0
        cai0_ca_ion = this.cai0
        cao0_ca_ion = this.cao0
        ki0_k_ion = this.ki0
        ko0_k_ion = this.ko0 
        nao0_na_ion = this.nao0
        nai0_na_ion = this.nai0
    }
    forsec basal {
        cai0_Cacum = this.cai0
        cai0_ca_ion = this.cai0
        cao0_ca_ion = this.cao0
        ki0_k_ion = this.ki0
        ko0_k_ion = this.ko0  
        nao0_na_ion = this.nao0
        nai0_na_ion = this.nai0
    }
}

/**
 * Initialize state variables
 */
proc init_states() {
    forsec all {
        v = this.v_init
    }
}

/**
 * Set variables in class/prototype namespace.
 */
proc set_indep_params() {
    // Axon parameters ---------------------------------------------------------
    
    // topological parameters
    dendelements=288
    somaelements = 3
    iselements=1   //initial segment elements
    axonnodes=28        
    paranodes1=(axonnodes-1)*2
    paranodes2=(axonnodes-1)*2
    axoninter=(axonnodes-1)*3
    total=dendelements+somaelements+iselements+axonnodes+paranodes1+paranodes2+axoninter    

    //morphological parameters//
    fiberD=2   //fiber diameter
    paralength1=3  //MYSA length
    nodelength=1
    space_p1=0.002  
    space_p2=0.004
    space_i=0.004

    //electrical parameters//   
    rhoa=0.7e6 //Ohm-um//
    mycm=0.1 //uF/cm2/lamella membrane//
    mygm=0.001 //S/cm2/lamella membrane//

    // Cell parameters ---------------------------------------------------------

    v_init=-60  //mV//

    //Extracell. ion concentrations taken from Bevan,Wilson 1999 paper (slice bathing solution)                                 
    //Intracell. ion concentrations are typical mammalian values (from Johnston & Wu, 1999 via NEUORN tutorial)
    cai0 = 1e-4  //from Gillies mod file  //was 2e-4     
    cao0 = 2             
    ki0 = 140 
    ko0 = 2.5     
    nao0 = 126   
    nai0 = 10 
    
    //insert CaT
    my_gcaT_CaT = 0 //0.001 (mho/cm2)
    //insert HVA
    my_gcaL_HVA = 9.5e-4 //0.002 (mho/cm2)
    my_gcaN_HVA = 1.15e-3 //0.012 (mho/cm2)
    //insert sKCa   
    my_gk_sKCa = 1.8*6.84e-5 //0.0001 (mho/cm2)
    //insert KDR    
    my_gk_KDR = 3.84e-3 //3.842910637e-03 (mho/cm2)
    //insert Kv31
    my_gk_Kv31 = 1.2*1.34e-2 //0.015 (mho/cm2)
    //insert Na 
    my_gna_Na = 0.75*1.48e-2 //1.0e-7 (mho/cm2)
    //insert NaL
    my_gna_NaL = 0.75*1.11e-5 //0.81e-5 (mho/cm2)   
    //insert Ih
    my_gk_Ih = 1.01e-3 //0.001 (mho/cm2)    
    //insert STh    
    my_gpas_STh = 7.84112e-05 //7.84112e-05 (mho/cm2) <0,1e9>
}

/**
 * Axon parameters dependent on other geometrical parameters.
 */
proc set_dependent_params() {
    if (fiberD==1) {
        axonD=0.8
        nodeD=0.7
        paraD1=0.7
        paraD2=0.8
        deltax=200
        paralength2=10
        nl=20
    }
    if (fiberD==2) {
        axonD=1.6
        nodeD=1.4
        paraD1=1.4
        paraD2=1.6
        deltax=200
        paralength2=10
        nl=30
    }

    Rpn0=(rhoa*.01)/(PI*((((nodeD/2)+space_p1)^2)-((nodeD/2)^2)))
    Rpn1=(rhoa*.01)/(PI*((((paraD1/2)+space_p1)^2)-((paraD1/2)^2)))
    Rpn2=(rhoa*.01)/(PI*((((paraD2/2)+space_p2)^2)-((paraD2/2)^2)))
    Rpx=(rhoa*.01)/(PI*((((axonD/2)+space_i)^2)-((axonD/2)^2)))

    interlength = (deltax-nodelength-(2*paralength1)-(2*paralength2))/6
}

/**
 * Set conductance distributions.
 */
proc set_conductances() {

    access soma[1]
    my_ind = int(n3d()/2)
    xsoma=x3d(my_ind)  //get coordinates for soma location
    ysoma=y3d(my_ind)
    zsoma=z3d(my_ind)
    //print "soma coords ", xsoma, ysoma, zsoma
    max_dist = 734.15 // Maximum dendrite-soma distance ; set to zero when calculating for the first time

    kdr_prox = -0.05 //Proximity for KDR channel (from Gillies 2005)
    kfr_prox = 0.8 //Proximity for Kv31 channel (from Gillies 2005)
    kca_prox = -0.52 //Proximity for KCa channel (from Gillies 2005)
    hcn_prox = -0.39 //Proximity for HCN channel (from Gillies 2005)
    cat_prox = -0.01 //Proximity for CaT channel (from Gillies 2005)
    can_prox = 0.5 //Proximity for CaN channel (from Gillies 2005)
    cal_prox = -0.57 //Proximity for CaL channel (from Gillies 2005)

    for i=0,dendelements-1 {
        access dend[i]
        my_ind = int(n3d()/2)
        xdend=x3d(my_ind)  //get coordinates for dendrite
        ydend=y3d(my_ind)
        zdend=z3d(my_ind)
        //print "       dend coords ", xdend, ydend, zdend
        app_dist = sqrt((xsoma-xdend)^2 + (ysoma-ydend)^2 + (zsoma-zdend)^2) //distance from soma to dend
        pd = app_dist/max_dist   //parametrized distance (from 0 to 1)
        //if (max_dist < app_dist) max_dist = app_dist  //for calculating maximum dendrite-soma distance
        
        //set up KDR conductance
        if (kdr_prox == 0) { 
            f = 1   
        } else {
            if (kdr_prox > 0) { 
                f = (1-kdr_prox-pd)/(1-kdr_prox)
            } else { 
                f = (kdr_prox+pd)/(1+kdr_prox) 
            }
        } 
        if (f < 0) f = 0
            gk_KDR   = 4.22e-5 + f*9.32e-5  //Basal conductance * f*Tree_Conductance 


        //set up CaT conductance
        if (cat_prox == 0) { 
            f = 1   
        } else {
            if (cat_prox > 0) { 
                f = (1-cat_prox-pd)/(1-cat_prox)
            } else { 
                f = (cat_prox+pd)/(1+cat_prox) 
            }
        } 
        if (f < 0) f = 0
            gcaT_CaT   = 1.17e-3 + f*1.67e-3  //Basal conductance * f*Tree_Conductance 

        //set up CaL conductance
        if (cal_prox == 0) { 
            f = 1   
        } else {
            if (cal_prox > 0) { 
                f = (1-cal_prox-pd)/(1-cal_prox)
            } else { 
                f = (cal_prox+pd)/(1+cal_prox) 
            }
        } 
        if (f < 0) f = 0
            gcaL_HVA   = 1.21e-4 + f*1.87e-3  //Basal conductance * f*Tree_Conductance 
        
        //set up CaN conductance
        if (can_prox == 0) { 
            f = 1   
        } else {
            if (can_prox > 0) { 
                f = (1-can_prox-pd)/(1-can_prox)
            } else { 
                f = (can_prox+pd)/(1+can_prox) 
            }
        } 
        if (f < 0) f = 0
            gcaN_HVA   = 0 + f*4.79e-4  //Basal conductance * f*Tree_Conductance 

        //set up KCa conductance
        if (kca_prox == 0) { 
            f = 1   
        } else {
            if (kca_prox > 0) { 
                f = (1-kca_prox-pd)/(1-kca_prox)
            } else { 
                f = (kca_prox+pd)/(1+kca_prox) 
            }
        } 
        if (f < 0) f = 0
            gk_sKCa   = 0 + 1.8*f*3.92e-5  //Basal conductance * f*Tree_Conductance 
        
        //set up Kv31 (KFR) conductance
        if (kfr_prox == 0) { 
            f = 1   
        } else {
            if (kfr_prox > 0) { 
                f = (1-kfr_prox-pd)/(1-kfr_prox)
            } else { 
                f = (kfr_prox+pd)/(1+kfr_prox) 
            }
        } 
        if (f < 0) f = 0
            gk_Kv31   = 8.91e-4 + f*1.0e-3  //Basal conductance * f*Tree_Conductance 


        //set up HCN conductance
        if (hcn_prox == 0) { 
            f = 1   
        } else {
            if (hcn_prox > 0) { 
                f = (1-hcn_prox-pd)/(1-hcn_prox)
            } else { 
                f = (hcn_prox+pd)/(1+hcn_prox) 
            }
        } 
        if (f < 0) f = 0
            gk_Ih   = 0 + f*5.1e-4  //Basal conductance * f*Tree_Conductance        
        
                    
        //print "Dend=", i, " dist = ", app_dist, " pd = ", pd, " f= ", f, " new cond. =", ghcnbar_hcn
        //print i,",", app_dist, ",", pd, ",", f, ",", ghcnbar_hcn

    } 
}

/**
 * Create sections without morphology.
 */
proc create_sections() {
    create soma[somaelements], dend[dendelements], initseg[iselements]
    create node[axonnodes], MYSA[paranodes1], FLUT[paranodes2], STIN[axoninter]

    for i=0,somaelements-1 {
        soma[i] {
            nseg = 1
            Ra = 150.2  //Ohm-cm//  //from Gillies 2005
            cm = 1

            insert Cacum    
                cai0_Cacum = cai0_ca_ion
            insert CaT
                gcaT_CaT = my_gcaT_CaT
            insert HVA
                gcaL_HVA = my_gcaL_HVA
                gcaN_HVA = my_gcaN_HVA
            insert sKCa 
                gk_sKCa = my_gk_sKCa
            insert KDR  
                gk_KDR = my_gk_KDR
            insert Kv31
                gk_Kv31 = my_gk_Kv31
            insert Na   
                gna_Na = my_gna_Na
            insert NaL
                gna_NaL = my_gna_NaL    
            insert Ih
                gk_Ih = my_gk_Ih
            insert STh  
                gpas_STh = my_gpas_STh          
        
            if (with_extracellular) {
                insert extracellular xraxial=1e+09 xg=1e+09 xc=0
            }

            all.append()
            somatic.append()
        }
    }

    for i=0,dendelements-1 {
        dend[i] {
            nseg = 1
            Ra = 150.2  //Ohm-cm//  //from Gillies 2005
            cm = 1

            //conductances for dendrites set at the end of file
            insert Cacum
                cai0_Cacum = cai0_ca_ion
            insert CaT
            insert HVA
            insert sKCa //CHANGED AT THE END 1.8*
            insert KDR  
            insert Kv31
            insert Na   
                gna_Na = 0.65*1e-7
            insert NaL
                gna_NaL = 0.65*8.1e-6
            insert Ih
            insert STh  
                gpas_STh = my_gpas_STh          

            if (with_extracellular) {
                insert extracellular xraxial=1e+09 xg=1e+09 xc=0
            }

            all.append()
            basal.append()
        }
    }

    // Axon initial segment
    for i=0,iselements-1 {
        initseg[i] {
            nseg = 1
            Ra = 150.2  //Ohm-cm//  //from Gillies 2005
            cm = 1
    
            insert Cacum    
                cai0_Cacum = cai0_ca_ion
            insert CaT
                gcaT_CaT = my_gcaT_CaT
            insert HVA
                gcaL_HVA = my_gcaL_HVA
                gcaN_HVA = my_gcaN_HVA
            insert sKCa 
                gk_sKCa = my_gk_sKCa
            insert KDR  
                gk_KDR = my_gk_KDR
            insert Kv31
                gk_Kv31 = my_gk_Kv31
            insert Na   
                gna_Na = my_gna_Na
            insert NaL
                gna_NaL = my_gna_NaL    
            insert Ih
                gk_Ih = my_gk_Ih
            insert STh  
                gpas_STh = my_gpas_STh          

            if (with_extracellular) {
                insert extracellular xraxial=1e+09 xg=1e+09 xc=0
            }

            all.append()
            axonal.append()
        }
    }

    // Nodes of Ranvier
    for i=0,axonnodes-2 {
        node[i]{                
            nseg=1
            Ra=rhoa/10000
            cm=2
            insert axnode75 
                gnabar_axnode75 = 2.0 //3  
                gnapbar_axnode75 = 0.05 
                gkbar_axnode75 = 0.07
                gl_axnode75 = 0.005
                ek_axnode75 = -85 //-95
                ena_axnode75 = 55 //45
                el_axnode75 = -60 
                vshift_axnode75 = 15 //10   //rest potential should be -80+vshift
                vtraub_axnode75 = -80 //-80

            if (with_extracellular) {
                insert extracellular xraxial=Rpn0 xg=1e10 xc=0
            }

            all.append()
            axonal.append()
            nodal.append()
        }
    }
    node[axonnodes-1] { 
        nseg=1
        Ra=rhoa/10000
        cm=2
        insert pas
            g_pas = 0.0001
            e_pas = -65 

        if (with_extracellular) {
            insert extracellular xraxial=Rpn0 xg=1e10 xc=0
        }

        all.append()
        axonal.append()
        nodal.append()
    }

    // Myelinated sections
    for i=0, paranodes1-1 {
        MYSA[i]{
            nseg=1
            Ra=rhoa/10000
            cm=2
            insert pas
                g_pas=0.0001    
                e_pas=-65

            if (with_extracellular) {
                insert extracellular xraxial=Rpn1 xg=mygm/(nl*2) xc=mycm/(nl*2)
            }
        }
        all.append()
        axonal.append()
        myelinated.append()
    }
    for i=0, paranodes2-1 {
        FLUT[i]{
            nseg=1
            Ra=rhoa/10000
            cm=2
            insert parak75
                gkbar_parak75 = 0.02 //0.02
                ek_parak75 = -85 //-95
                vshift_parak75 = 15 //10
            insert pas
                g_pas=0.0001        
                e_pas=-60

            if (with_extracellular) {
                insert extracellular xraxial=Rpn2 xg=mygm/(nl*2) xc=mycm/(nl*2)
            }
        }
        all.append()
        axonal.append()
        myelinated.append()
    }
    for i=0, axoninter-1 {
        STIN[i]{
            nseg=1
            Ra=rhoa/10000
            cm=2
            insert pas
                g_pas=0.0001
                e_pas=-65

            if (with_extracellular) {
                insert extracellular xraxial=Rpx xg=mygm/(nl*2) xc=mycm/(nl*2)
            }
        }
        all.append()
        axonal.append()
        myelinated.append()
    }

    // Ion styles from Gillies & Willshaw model
    // NOTE: original cinit was 1, can set to 0 to set on per-cell basis
    forsec all {
        ion_style("na_ion",1,2,1,0,1)
        ion_style("k_ion",1,2,1,0,1)
        ion_style("ca_ion",3,2,1,1,1)
    }
}

/**
 * Add Morphology info to sections.
 */
proc connect_sections() {

    connect soma[1](0), soma[0](1)  
    connect soma[2](0), soma[1](1)

    connect dend[0](0), soma[0](0)
    connect dend[1](0), dend[0](1)
    connect dend[2](0), dend[1](1)
    connect dend[3](0), dend[2](1)
    connect dend[4](0), dend[3](1)
    connect dend[5](0), dend[4](1)
    connect dend[6](0), dend[5](1)
    connect dend[7](0), dend[6](1)
    connect dend[8](0), dend[7](1)
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
    for i=1, axonnodes-2 {
        connect FLUT[2*i](0), MYSA[2*i](1)
        connect STIN[3*i](0), FLUT[2*i](1)
        connect STIN[3*i+1](0), STIN[3*i](1)
        connect STIN[3*i+2](0), STIN[3*i+1](1)
        connect FLUT[2*i+1](0), STIN[3*i+2](1)
        connect MYSA[2*i+1](0), FLUT[2*i+1](1)
        connect node[i+1](0), MYSA[2*i+1](1)    
    }
} // end connect_sections


/**
 * Add 3D coordinates to sections.
 */
proc add_3d_coordinates() {

    //soma diam incr from 8 to 18
    soma[0]{
        pt3dadd(-4371.69,5242.77,-2269.88,2) 
        pt3dadd(-4371.73,5241.93,-2269.53,18) 
    }
    soma[1]{
        pt3dadd(-4371.73,5241.93,-2269.53,18) 
        pt3dadd(-4372.48,5226.49,-2263.26,18) 
    }
    soma[2]{
        pt3dadd(-4372.48,5226.49,-2263.26,18) 
        pt3dadd(-4372.52,5225.59,-2262.91,2) 
    }


    //dend0
    dend[0] {
        pt3dadd(-4371.69,5242.77,-2269.88,2)
     // pt3dadd(-1700.70 , -614.07    , 6.45    , 4.62)  
        pt3dadd(-4369.79,5249.08,-2269.49,1.6)
        pt3dadd(-4369.67,5257.1,-2271.75,1.6)
    }
    //dend1
    dend[1] {
        pt3dadd(-4369.67,5257.1,-2271.75,1.6)
        pt3dadd(-4372.02,5261.42,-2268.68,1.6)
        pt3dadd(-4384.96,5265.7,-2267.12,1.6)
        pt3dadd(-4392.13,5272.06,-2264.94,1.6)
        pt3dadd(-4396.11,5275.43,-2262.57,1.6)
        pt3dadd(-4397.32,5278.52,-2259.5,0.92)    //diameter changed to match dend19(0)
        //pt3dadd(-4397.12,5277.79,-2256.09,0.92)  //removed to match dend19(0)
    }
    //dend2
    dend[2] {
        pt3dadd(-4397.32,5278.52,-2259.5,0.92)    //added to match dend1(1)
        pt3dadd(-4397.12,5277.79,-2256.09,0.92)
        pt3dadd(-4402.87,5284.14,-2249.04,0.92)
    }
    dend[3] {
        pt3dadd(-4402.87,5284.14,-2249.04,0.92)
        pt3dadd(-4408.27,5289.13,-2245.31,0.92)
        pt3dadd(-4410.5,5291.38,-2240.88,0.92) //was 1.232
        pt3dadd(-4416.41,5294.58,-2231.63,0.92) //was 1.232
        pt3dadd(-4422.07,5293.61,-2226.99,0.92) //was 1.232
    }
    dend[4] {
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    }
    //dend3
    dend[19] {
        pt3dadd(-4397.32,5278.52,-2259.5,0.92) //was 1.6
        pt3dadd(-4404.64,5285.24,-2258.43,0.92) //was 1.6
        pt3dadd(-4413.03,5290.52,-2257.82,0.92) //was 1.6
        pt3dadd(-4414.18,5295.43,-2254.16,0.92) //was 1.6
    }
    //dend4
    dend[20] {
        pt3dadd(-4414.18,5295.43,-2254.16,0.92) //was 1.6
        pt3dadd(-4414.07,5295.57,-2248.42,0.92) //was 1.536
        pt3dadd(-4422.42,5300.37,-2245.11,0.92) //was 1.232
    }
    dend[21]{ 
        pt3dadd(-4422.42,5300.37,-2245.11,0.92) //was 1.232
        pt3dadd(-4427.91,5300.98,-2241.59,0.92)
        pt3dadd(-4429.02,5302.96,-2240.11,0.92)
        pt3dadd(-4428.68,5306.87,-2234.33,0.92)
        pt3dadd(-4453.02,5307.63,-2227.41,0.92)
    }
    dend[22]{
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    }
    //dend5
    dend[33] {
        pt3dadd(-4414.18,5295.43,-2254.16,0.92) //was 1.6
        pt3dadd(-4418.37,5300.13,-2255.82,0.92) //was 1.536
        pt3dadd(-4418.22,5305.98,-2253.9,0.92) //was 1.536
        pt3dadd(-4423.27,5310.82,-2254.69,0.92) //was 1.536
    }
    dend[34]{
        pt3dadd(-4423.27,5310.82,-2254.69,0.92) //was 1.536
        pt3dadd(-4423.13,5314.49,-2251.06,0.92) //was 1.536
        pt3dadd(-4423.02,5319.85,-2251.33,0.92) //was 1.536
        pt3dadd(-4422.67,5326.66,-2247.95,0.92) //was 1.536
        pt3dadd(-4437.4,5338.74,-2248.55,0.92) //was 1.536
    }
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    }
    //dend6
    dend[40]{
        pt3dadd(-4369.67,5257.1,-2271.75,1.6)
        pt3dadd(-4369.59,5265.47,-2276.11,1.6)
    }
    //dend7
    dend[41]{
        pt3dadd(-4369.59,5265.47,-2276.11,1.6)
        pt3dadd(-4359.97,5285.26,-2269.3,1.536)
    }
    dend[42]{
        pt3dadd(-4359.97,5285.26,-2269.3,1.536)
        pt3dadd(-4366.34,5294.36,-2266.86,1.536)
    }
    dend[43]{
        pt3dadd(-4366.34,5294.36,-2266.86,1.536)
        pt3dadd(-4383.14,5308.4,-2262.57,1.536)
        pt3dadd(-4393.72,5323.12,-2256.07,1.536)
    }
    dend[44]{
        pt3dadd(-4393.72,5323.12,-2256.07,1.536)
        pt3dadd(-4399.51,5331.23,-2253.17,1.536)
    }
    dend[45]{
        pt3dadd(-4399.51,5331.23,-2253.17,1.536)
        pt3dadd(-4405.11,5353.65,-2246.91,1.536)
        pt3dadd(-4415.18,5369.18,-2238.09,1.536)
    }
    dend[46]{
        pt3dadd(-4415.18,5369.18,-2238.09,1.536)
        pt3dadd(-4426.09,5384.8,-2234.14,1.536)
        pt3dadd(-4425.98,5386.69,-2230.2,1.232)
    }
    dend[47]{ 
        pt3dadd(-4425.98,5386.69,-2230.2,1.232)
        pt3dadd(-4426.15,5391.67,-2229.28,1.232)
        pt3dadd(-4425.31,5407.83,-2224.91,0.624)
    }
    dend[48]{
        pt3dadd(-4425.31,5407.83,-2224.91,0.624)
        pt3dadd(-4420.88,5562.97,-2154.46,0.624) //was 0.92
        pt3dadd(-4428.59,5574.93,-2148.36,0.624) //was 0.92
    }
    dend[49]{
        pt3dadd(-4428.59,5574.93,-2148.36,0.624) //was 0.92
        pt3dadd(-4451.68,5591.8,-2146.76,0.624) //was 0.92
        pt3dadd(-4482.61,5616.36,-2140.91,0.624) //was 0.92
    }
    //dend8
    dend[50]{
        pt3dadd(-4369.59,5265.47,-2276.11,1.6)
        pt3dadd(-4364.92,5266.48,-2278.5,1.6)
        pt3dadd(-4358.98,5269.98,-2285.96,1.6)
        pt3dadd(-4357.28,5273.46,-2292.99,1.6)
        pt3dadd(-4357.47,5276.69,-2298.68,1.6)
        pt3dadd(-4357.44,5280.53,-2301.33,1.6)
    }
    //dend9
    dend[51]{
        pt3dadd(-4357.44,5280.53,-2301.33,1.6)
        pt3dadd(-4361.54,5281.75,-2302.38,1.6)
        pt3dadd(-4361.52,5284.14,-2304.1,1.6)
        pt3dadd(-4361.45,5287.02,-2303.13,1.232)
    }
    dend[52]{
        pt3dadd(-4361.45,5287.02,-2303.13,1.232)
        pt3dadd(-4366.5,5297.57,-2310.19,1.232) //was 1.536
        pt3dadd(-4372.66,5307.06,-2312.7,1.232) //was 1.536
        pt3dadd(-4374.32,5314.03,-2315.28,1.232) //was 1.536
        pt3dadd(-4374.41,5317.78,-2324.23,1.232) //was 1.536
    }
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    }
    //dend10
    dend[62]{
        pt3dadd(-4357.44,5280.53,-2301.33,1.6)
        pt3dadd(-4352.12,5291.8,-2303.15,1.536)
        pt3dadd(-4351.94,5298.33,-2300.56,1.232)
        pt3dadd(-4353.19,5305.35,-2297.22,0.92)
    }
    dend[63]{
        pt3dadd(-4353.19,5305.35,-2297.22,0.92)
        pt3dadd(-4347,5319.35,-2294.68,0.92)
        pt3dadd(-4348.75,5329.87,-2289.67,0.92)
        pt3dadd(-4353.74,5346.89,-2276.65,0.92)
    }
    dend[64]{
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    }
    //dend11
    dend[69]{
        pt3dadd(-4409.78,5562.35,-2132.26,0.92)
        pt3dadd(-4410.34,5560.93,-2129.05,0.616)
        pt3dadd(-4411.51,5566.27,-2126.76,0.616)
    }
    //dend12
    dend[70]{
        pt3dadd(-4409.78,5562.35,-2132.26,0.92)
        pt3dadd(-4408.38,5571.17,-2129.6,0.92)
    }
    dend[71]{
        pt3dadd(-4408.38,5571.17,-2129.6,0.92)
        pt3dadd(-4412.01,5584.21,-2125.81,0.92)
        pt3dadd(-4419.74,5603.86,-2121.71,0.92)
    }
    dend[72]{
        pt3dadd(-4419.74,5603.86,-2121.71,0.92)
        pt3dadd(-4419.4,5613.84,-2114.13,0.92)
        pt3dadd(-4419.22,5625.56,-2117.37,0.92) //was 1.24
    }
    dend[73]{
        pt3dadd(-4419.22,5625.56,-2117.37,0.92) //was 1.24
        pt3dadd(-4435.9,5658.81,-2111.5,0.624)
        pt3dadd(-4454.8,5699.5,-2107.5,0.624)
    }
    dend[74]{
        pt3dadd(-4454.8,5699.5,-2107.5,0.624)
        pt3dadd(-4466.03,5728.18,-2103.28,0.624)
        pt3dadd(-4475.68,5742.89,-2086.46,0.624)
    }
    dend[75]{
        pt3dadd(-4475.68,5742.89,-2086.46,0.624)
        pt3dadd(-4487.85,5758.56,-2079.7,0.624)
        pt3dadd(-4498.99,5796.77,-2057.32,0.624)
    }
    dend[76]{
        pt3dadd(-4498.99,5796.77,-2057.32,0.624)
        pt3dadd(-4498.39,5817.02,-2046.82,0.624)
        pt3dadd(-4500.12,5835.31,-2042.1,0.624)
    }

    //-----------------------------------------------------------
    //dend13
    dend[77]{
        pt3dadd(-4372.52,5225.59,-2262.91,2)
      //pt3dadd(-1697.84 , -613.84    , 6.30    , 1.92) 
        pt3dadd(-4370.19,5218.63,-2257.9,1.6)
        pt3dadd(-4370.31,5211.33,-2256.63,1.6)
    }
    //dend14
    dend[78]{
        pt3dadd(-4370.31,5211.33,-2256.63,1.6)
        pt3dadd(-4370.3,5206.72,-2251.22,1.232)
        pt3dadd(-4373.75,5200.71,-2248.68,1.232)
        pt3dadd(-4374.54,5198.31,-2241.32,1.232)
    }
    dend[79]{
        pt3dadd(-4374.54,5198.31,-2241.32,1.232)
        pt3dadd(-4382.44,5199.35,-2233.96,1.232)
        pt3dadd(-4389.06,5190.63,-2225.35,1.232)
        pt3dadd(-4396.39,5183.36,-2217.47,1.232)
        pt3dadd(-4399.53,5185.78,-2207.28,1.232)
    }
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    }
    //dend15
    dend[87]{
        pt3dadd(-4370.31,5211.33,-2256.63,1.6)
        pt3dadd(-4372.9,5204.81,-2255.08,1.6)
    }
    //dend16
    dend[88]{
        pt3dadd(-4372.9,5204.81,-2255.08,1.6)
        pt3dadd(-4365.9,5190.78,-2257.32,1.536)
        pt3dadd(-4350.58,5170.61,-2263.72,1.536)
    }
    dend[89]{
        pt3dadd(-4350.58,5170.61,-2263.72,1.536)
        pt3dadd(-4349.88,5168.08,-2270.35,1.232)
        pt3dadd(-4319.59,5155.4,-2275.5,1.232)
    }
    dend[90]{
        pt3dadd(-4319.59,5155.4,-2275.5,1.232)
        pt3dadd(-4294.53,5137.9,-2273.12,1.232)
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    }
    //dend17
    dend[99]{
        pt3dadd(-4372.9,5204.81,-2255.08,1.6)
        pt3dadd(-4377.24,5196.63,-2250.79,1.536)
        pt3dadd(-4380.99,5188.93,-2246.75,1.536)
    }
    dend[100]{
        pt3dadd(-4380.99,5188.93,-2246.75,1.536)
        pt3dadd(-4386.57,5185.64,-2243.71,1.536)
        pt3dadd(-4393.06,5180.06,-2239.75,1.536)
        pt3dadd(-4400.27,5175.47,-2236.29,1.536)
        pt3dadd(-4413.23,5172.95,-2228.83,1.536)
    }
    dend[101]{
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    }
    //dend18
    dend[106]{
        pt3dadd(-4541.43,5065.89,-2170.68,0.92)
        pt3dadd(-4556.86,5056.46,-2162.39,0.92)
        pt3dadd(-4566.55,5051.52,-2158.11,0.92)
    }
    dend[107]{
        pt3dadd(-4566.55,5051.52,-2158.11,0.92)
        pt3dadd(-4576.7,5046.25,-2153.96,0.92)
        pt3dadd(-4574.83,5042.2,-2151.52,0.92)
        pt3dadd(-4574.97,5030.57,-2154.43,0.92)
    }
    dend[108]{
        pt3dadd(-4574.97,5030.57,-2154.43,0.92)
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    }
    //dend19
    dend[113]{
        pt3dadd(-4541.43,5065.89,-2170.68,0.92)
        pt3dadd(-4546.78,5060.02,-2176.11,0.92)
        pt3dadd(-4561.12,5059.78,-2182.4,0.92)
    }
    dend[114]{
        pt3dadd(-4561.12,5059.78,-2182.4,0.92)
        pt3dadd(-4571.71,5061.52,-2185.75,0.92)
        pt3dadd(-4572.41,5053.21,-2183.12,0.92)
        pt3dadd(-4572.37,5052.35,-2187.84,0.92)
    }
    dend[115]{
        pt3dadd(-4572.37,5052.35,-2187.84,0.92)
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    }
    //-------------------------------------------------------
    //dend20
    dend[120]{
        pt3dadd(-4372.52,5225.59,-2262.91,2)
      //pt3dadd(-1698.40 , -614.04    , 6.45    , 1.54)  
        pt3dadd(-4370.33,5228.25,-2275.88,1.6)
        pt3dadd(-4370.45,5224.57,-2278.08,1.6)
    }
    //dend21
    dend[121]{
        pt3dadd(-4370.45,5224.57,-2278.08,1.6)
        pt3dadd(-4370.61,5220.17,-2281.96,1.6)
        pt3dadd(-4371.41,5217.85,-2290.85,1.6)
        pt3dadd(-4371.54,5217.1,-2297.2,1.6)
    }
    //dend22
    dend[122]{
        pt3dadd(-4371.54,5217.1,-2297.2,1.6)
        pt3dadd(-4363.58,5208.38,-2309.52,1.536)
    }
    dend[123]{
        pt3dadd(-4363.58,5208.38,-2309.52,1.536)
        pt3dadd(-4363.99,5205.29,-2320.17,1.232)
        pt3dadd(-4321.82,5199.1,-2340.48,1.232)
    }
    dend[124]{
        pt3dadd(-4321.82,5199.1,-2340.48,1.232)
        pt3dadd(-4341.34,5195.33,-2360.7,1.232)
        pt3dadd(-4341.54,5193.62,-2369.82,1.232)
    }
    //dend23
    dend[125]{
        pt3dadd(-4341.54,5193.62,-2369.82,1.232)
        pt3dadd(-4341.84,5190.22,-2381.94,1.232)
    }
    dend[126]{
        pt3dadd(-4341.84,5190.22,-2381.94,1.232)
        pt3dadd(-4330.18,5195.63,-2399.36,1.232)
        pt3dadd(-4328.47,5195.72,-2410.53,0.92)
        pt3dadd(-4314.92,5197.3,-2424.47,0.92)
    }
    dend[127]{
        pt3dadd(-4314.92,5197.3,-2424.47,0.92)
        pt3dadd(-4315.08,5205.62,-2442.19,0.92)
        pt3dadd(-4309.3,5213.52,-2463.02,0.92)
    }
    dend[128]{
        pt3dadd(-4309.3,5213.52,-2463.02,0.92)
        pt3dadd(-4309.25,5221.48,-2476.8,0.92)
        pt3dadd(-4309.39,5227.51,-2490.46,0.92)
        pt3dadd(-4309.41,5231.74,-2496,0.92)
    }
    dend[129]{
        pt3dadd(-4309.41,5231.74,-2496,0.92)
        pt3dadd(-4304.71,5246.26,-2527.74,0.616)
        pt3dadd(-4303.25,5253.78,-2543.68,0.616)
    }
    dend[130]{
        pt3dadd(-4303.25,5253.78,-2543.68,0.616)
        pt3dadd(-4307.01,5259.96,-2555.35,0.616)
        pt3dadd(-4305.77,5272.64,-2573.39,0.616)
        pt3dadd(-4294.3,5271.96,-2586.51,0.616)
    }
    dend[131]{
        pt3dadd(-4294.3,5271.96,-2586.51,0.616)
        pt3dadd(-4281.19,5279.31,-2599.35,0.616)
        pt3dadd(-4282,5282.38,-2614.09,0.616)
    }
    //dend24
    dend[132]{
        pt3dadd(-4341.54,5193.62,-2369.82,1.232)
        pt3dadd(-4347.15,5202.24,-2380.74,0.92)
        pt3dadd(-4332.16,5202.84,-2395.37,0.92)
    }
    dend[133]{        
        pt3dadd(-4332.16,5202.84,-2395.37,0.92)
        pt3dadd(-4323.52,5203.19,-2404.51,0.92)
        pt3dadd(-4317.14,5201.65,-2422.42,0.92)
        pt3dadd(-4303.08,5197.19,-2441.88,0.92)
    }
    dend[134]{     
        pt3dadd(-4303.08,5197.19,-2441.88,0.92)
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    }
    //dend25
    dend[141]{
        pt3dadd(-4371.54,5217.1,-2297.2,1.6)
        pt3dadd(-4371.3,5218.78,-2302.35,1.536)
        pt3dadd(-4375.52,5216.91,-2306.17,1.536)
    }
    dend[142]{
        pt3dadd(-4375.52,5216.91,-2306.17,1.536)
        pt3dadd(-4384.61,5222.06,-2311.29,1.536)
        pt3dadd(-4392.26,5216.82,-2323.09,1.536)
        pt3dadd(-4398.42,5215.46,-2329.57,1.536)
    }
    dend[143]{
        pt3dadd(-4398.42,5215.46,-2329.57,1.536)
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    }
    //dend26
    dend[156]{
        pt3dadd(-4370.45,5224.57,-2278.08,1.6)
        pt3dadd(-4369.65,5216.23,-2273.48,1.6)
        pt3dadd(-4369.83,5205.52,-2271.7,1.6)
        pt3dadd(-4360.16,5194.34,-2267.74,1.6)
    }
    dend[157]{
        pt3dadd(-4360.16,5194.34,-2267.74,1.6)
        pt3dadd(-4357.42,5187.23,-2262.37,1.6)
        pt3dadd(-4357.32,5185.13,-2255.01,1.536)
        pt3dadd(-4348.35,5173.15,-2248.29,1.536)
        pt3dadd(-4342.15,5160.83,-2240.87,1.536)
    }
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    }
    //---------------------------------------------------
    //dend27
    dend[167]{
        pt3dadd(-4372.52,5225.59,-2262.91,2)
      //pt3dadd(-1699.61 , -614.56    , 6.45    , 1.92)  
        pt3dadd(-4370.29,5229.94,-2275.47,1.6)
        pt3dadd(-4370.43,5225.68,-2278.5,1.6)
    }
    //dend28
    dend[168]{
        pt3dadd(-4370.43,5225.68,-2278.5,1.6)
        pt3dadd(-4370.6,5221.64,-2283.48,1.6)
    }
    //dend29
    dend[169]{
        pt3dadd(-4370.6,5221.64,-2283.48,1.6)
        pt3dadd(-4370.68,5224.91,-2290.96,1.536)
        pt3dadd(-4370.78,5226.35,-2297.8,1.536)
        pt3dadd(-4377.15,5237.65,-2305.83,1.536)
    }
    //dend30
    dend[170]{
        pt3dadd(-4377.15,5237.65,-2305.83,1.536)
        pt3dadd(-4377.22,5241.52,-2313.91,1.232)
        pt3dadd(-4366.04,5248.71,-2319.43,1.232)
    }
    dend[171]{
        pt3dadd(-4366.04,5248.71,-2319.43,1.232)
        pt3dadd(-4361.2,5256.01,-2327.26,1.232)
        pt3dadd(-4356.4,5260.51,-2333.98,1.232)
        pt3dadd(-4356.48,5261.47,-2339.36,1.232)
    }
    dend[172]{
        pt3dadd(-4356.48,5261.47,-2339.36,1.232)
        pt3dadd(-4356.52,5265.53,-2345.61,0.92)
        pt3dadd(-4355.57,5269.94,-2347.02,0.92)
        pt3dadd(-4347.27,5274.57,-2355.12,0.92)
    }
    //dend31
    dend[173]{
        pt3dadd(-4347.27,5274.57,-2355.12,0.92)
        pt3dadd(-4343.26,5276.44,-2362.15,0.616)
    }
    //dend32
    dend[174]{
        pt3dadd(-4343.26,5276.44,-2362.15,0.616)
        pt3dadd(-4345.34,5285,-2373.23,0.616)
    }
    dend[175]{
        pt3dadd(-4345.34,5285,-2373.23,0.616)
        pt3dadd(-4355.87,5301.67,-2373.49,0.616)
        pt3dadd(-4361.15,5304.3,-2376.84,0.616)
    }
    dend[176]{
        pt3dadd(-4361.15,5304.3,-2376.84,0.616)
        pt3dadd(-4358,5309.11,-2385.7,0.616)
        pt3dadd(-4331.06,5309.27,-2396.15,0.616)
        pt3dadd(-4309.57,5313.61,-2427.54,0.616)
    }
    //dend33
    dend[177]{
        pt3dadd(-4343.26,5276.44,-2362.15,0.616)
        pt3dadd(-4344.14,5275.16,-2368.77,0.616) //was 0.92
    }
    dend[178]{
        pt3dadd(-4344.14,5275.16,-2368.77,0.616) //was 0.92
        pt3dadd(-4323.05,5277.14,-2388.04,0.616) //was 0.92
    }
    dend[179]{
        pt3dadd(-4323.05,5277.14,-2388.04,0.616) //was 0.92
        pt3dadd(-4306.41,5278.79,-2402.06,0.616) //was 0.92
        pt3dadd(-4294.97,5281.53,-2428.04,0.616) //was 0.92
    }
    //dend34
    dend[180]{
        pt3dadd(-4347.27,5274.57,-2355.12,0.92)
        pt3dadd(-4362.63,5286.23,-2366.04,0.92)
        pt3dadd(-4361.87,5297.65,-2368.62,0.616)
        pt3dadd(-4361.67,5301.02,-2369.75,0.616)
    }
    //dend35
    dend[181]{
        pt3dadd(-4377.15,5237.65,-2305.83,1.536)
        pt3dadd(-4381.58,5245.59,-2308.44,0.92)
    }
    dend[182]{
        pt3dadd(-4381.58,5245.59,-2308.44,0.92)
        pt3dadd(-4389.11,5254.25,-2312.02,0.92)
        pt3dadd(-4399.1,5261.88,-2313.47,0.92)
        pt3dadd(-4403.25,5271.92,-2319.07,0.92)
    }
    dend[183]{
        pt3dadd(-4403.25,5271.92,-2319.07,0.92)
        pt3dadd(-4405.3,5281.58,-2321.17,0.92)
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    }
    //dend36
    dend[190]{
        pt3dadd(-4370.6,5221.64,-2283.48,1.6)
        pt3dadd(-4370.98,5211.46,-2292.91,1.232)
        pt3dadd(-4365.65,5199.37,-2308.33,1.232)
    }
    dend[191]{
        pt3dadd(-4365.65,5199.37,-2308.33,1.232)
        pt3dadd(-4361.56,5192.89,-2325.97,1.232)
        pt3dadd(-4361.93,5186.65,-2339.01,1.232)
        pt3dadd(-4362.22,5182.72,-2350.47,0.92)
    }
    dend[192]{
        pt3dadd(-4362.22,5182.72,-2350.47,0.92)
        pt3dadd(-4364.96,5178.95,-2367.14,0.92)
        pt3dadd(-4372.08,5177.08,-2385.57,0.92)
    }
    dend[193]{
        pt3dadd(-4372.08,5177.08,-2385.57,0.92)
        pt3dadd(-4375.3,5174.52,-2405.91,0.92)
        pt3dadd(-4375.88,5183.36,-2422.94,0.92)
        pt3dadd(-4380.22,5192.16,-2437.09,0.92)
    }
    dend[194]{
        pt3dadd(-4380.22,5192.16,-2437.09,0.92)
        pt3dadd(-4380.35,5200.04,-2452.42,0.92)
        pt3dadd(-4372.8,5204.03,-2468.68,0.92)
    }
    //dend37
    dend[195]{
        pt3dadd(-4370.43,5225.68,-2278.5,1.6)
        pt3dadd(-4365.66,5222.14,-2270.34,1.6)
        pt3dadd(-4353.18,5222.16,-2261.52,1.6)
        pt3dadd(-4353.17,5221.34,-2252.84,1.6)
        pt3dadd(-4352.93,5221.02,-2239.52,1.6)
        pt3dadd(-4373.65,5236.94,-2227.12,1.6)
        pt3dadd(-4378.5,5243.76,-2219.14,1.6)
    }
    //dend38
    dend[196]{
        pt3dadd(-4378.5,5243.76,-2219.14,1.6)
        pt3dadd(-4382.31,5249.32,-2217.26,1.6)
        pt3dadd(-4390.36,5254.24,-2214.33,1.6)
        pt3dadd(-4396.55,5258.75,-2212.77,1.6)
        pt3dadd(-4396.39,5265.57,-2211.35,1.6)
    }
    ///dend39
    dend[197]{
        pt3dadd(-4396.39,5265.57,-2211.35,1.6)
        pt3dadd(-4403.65,5269.48,-2211.61,1.536)
        pt3dadd(-4420.43,5278.96,-2209.51,1.536)
        pt3dadd(-4412.47,5281.48,-2210.42,1.536)
    }
    //dend40
    dend[198]{
        pt3dadd(-4412.47,5281.48,-2210.42,1.536)
        pt3dadd(-4419.13,5284.91,-2209.22,1.232)
        pt3dadd(-4421.76,5290.81,-2207.24,1.232)
        pt3dadd(-4419.65,5293.34,-2207.05,0.92)
        pt3dadd(-4429.97,5297.36,-2206.25,0.92)
    }
    //dend41
    dend[199]{
        pt3dadd(-4429.97,5297.36,-2206.25,0.92)
        pt3dadd(-4439.07,5303.33,-2205.34,0.92)
        pt3dadd(-4450.75,5310.63,-2203.25,0.92)
        pt3dadd(-4463.9,5315.23,-2205.85,0.92)
    }
    dend[200]{
        pt3dadd(-4463.9,5315.23,-2205.85,0.92)
        pt3dadd(-4474.37,5323.13,-2201.6,0.92)
        pt3dadd(-4485.28,5329.89,-2196.06,0.92)
        pt3dadd(-4497.14,5333.24,-2191.01,0.92)
        pt3dadd(-4503.35,5335.26,-2187.59,0.92)
    }
    dend[201]{
        pt3dadd(-4503.35,5335.26,-2187.59,0.92)
        pt3dadd(-4512.09,5341.64,-2183.78,0.92)
        pt3dadd(-4512.11,5349.23,-2185.36,0.92)
        pt3dadd(-4512.2,5350.32,-2183.48,0.92)
    }
    //dend42
    dend[202]{
        pt3dadd(-4429.97,5297.36,-2206.25,0.92)
        pt3dadd(-4430.18,5298.06,-2202.86,0.92)
        pt3dadd(-4434.84,5297.56,-2200.53,0.92)
    }
    dend[203]{
        pt3dadd(-4434.84,5297.56,-2200.53,0.92)
        pt3dadd(-4455.43,5304.7,-2187.95,0.92)
        pt3dadd(-4465.47,5311.04,-2174.92,0.92)
        pt3dadd(-4483.51,5316.38,-2164.87,0.92)
        pt3dadd(-4495.21,5323.29,-2155.27,0.92)
    }
    dend[204]{
        pt3dadd(-4495.21,5323.29,-2155.27,0.92)
        pt3dadd(-4504.88,5327.69,-2143.97,0.92)
        pt3dadd(-4513.43,5330.79,-2133.83,0.92)
        pt3dadd(-4513.21,5334.21,-2125.73,0.92)
    }
    dend[205]{
        pt3dadd(-4513.21,5334.21,-2125.73,0.92)
        pt3dadd(-4513.11,5337.37,-2123.52,0.616)
        pt3dadd(-4537.17,5346.38,-2118.55,0.616)
        pt3dadd(-4549.06,5351.78,-2108.93,0.616)
        pt3dadd(-4557.53,5359.91,-2092.27,0.616)
    }
    dend[206]{
        pt3dadd(-4557.53,5359.91,-2092.27,0.616)
        pt3dadd(-4563.6,5359.1,-2087.09,0.616)
        pt3dadd(-4569.8,5364.14,-2078.95,0.616)
        pt3dadd(-4569.56,5373.27,-2075.84,0.616)
        pt3dadd(-4579.15,5373.04,-2070.79,0.616)
    }
    //dend43
    dend[207]{
        pt3dadd(-4412.47,5281.48,-2210.42,1.536)
        pt3dadd(-4418.78,5287.48,-2201.04,0.92)
        pt3dadd(-4418.54,5289.45,-2198.5,0.92)
    }
    dend[208]{
        pt3dadd(-4418.54,5289.45,-2198.5,0.92)
        pt3dadd(-4431.87,5297.72,-2190.92,0.92)
        pt3dadd(-4452.01,5306.92,-2180.2,0.92)
        pt3dadd(-4463.26,5316.28,-2172.36,0.92)
    }
    dend[209]{
        pt3dadd(-4463.26,5316.28,-2172.36,0.92)
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    }
    //dend44
    dend[216]{
        pt3dadd(-4396.39,5265.57,-2211.35,1.6)
        pt3dadd(-4390.72,5273.99,-2207.85,0.92)
        pt3dadd(-4398.21,5286.57,-2206.06,0.92)
    }
    dend[217]{
        pt3dadd(-4398.21,5286.57,-2206.06,0.92)
        pt3dadd(-4408.79,5296.53,-2202.27,0.92)
        pt3dadd(-4414.14,5303.98,-2189.99,0.92)
        pt3dadd(-4418.04,5311.74,-2187.39,0.92)
    }
    dend[218]{
        pt3dadd(-4418.04,5311.74,-2187.39,0.92)
        pt3dadd(-4417.5,5320.75,-2184.03,0.92)
        pt3dadd(-4419.52,5323.17,-2184.84,0.92)
        pt3dadd(-4419.32,5327.84,-2187.08,0.92)
    }
    dend[219]{
        pt3dadd(-4419.32,5327.84,-2187.08,0.92)
        pt3dadd(-4437.11,5340.92,-2188.17,0.92)
        pt3dadd(-4448.58,5355.07,-2181.86,0.92)
        pt3dadd(-4461.65,5364.4,-2176.8,0.92)
    }
    dend[220]{
        pt3dadd(-4461.65,5364.4,-2176.8,0.92)
        pt3dadd(-4473.55,5374.96,-2173.43,0.92)
        pt3dadd(-4478.88,5392,-2163.63,0.92)
    }
    //dend45
    dend[221]{
        pt3dadd(-4478.88,5392,-2163.63,0.92)
        pt3dadd(-4476.78,5399.29,-2161.31,0.92)
        pt3dadd(-4476.66,5405.84,-2161.98,0.92)
    }
    dend[222]{
        pt3dadd(-4476.66,5405.84,-2161.98,0.92)
        pt3dadd(-4489.29,5416.38,-2158.2,0.92)
        pt3dadd(-4500.45,5427.26,-2147.15,0.92)
        pt3dadd(-4505.05,5443.72,-2136.71,0.92)
    }
    dend[223]{
        pt3dadd(-4505.05,5443.72,-2136.71,0.92)
        pt3dadd(-4504.61,5456.05,-2126.1,0.92)
        pt3dadd(-4507.41,5491.16,-2101.44,0.92)
        pt3dadd(-4515.94,5507.92,-2089.66,0.92)
        pt3dadd(-4522.19,5518.24,-2082.36,0.92)
    }
    dend[224]{
        pt3dadd(-4522.19,5518.24,-2082.36,0.92)
        pt3dadd(-4530.65,5526.03,-2072.42,0.92)
        pt3dadd(-4539.93,5537.1,-2062.99,0.92)
        pt3dadd(-4548.76,5553.34,-2051.03,0.92)
    }
    dend[225]{
        pt3dadd(-4548.76,5553.34,-2051.03,0.92)
        pt3dadd(-4556.47,5558.89,-2037.45,0.92)
        pt3dadd(-4565.85,5561.33,-2032.35,0.92)
        pt3dadd(-4567.36,5564.21,-2029.31,0.92)
    }
    //dend46
    dend[226]{
        pt3dadd(-4478.88,5392,-2163.63,0.92)
        pt3dadd(-4480.12,5392.69,-2159.81,0.616)
    }
    dend[227]{ 
        pt3dadd(-4480.12,5392.69,-2159.81,0.616)
        pt3dadd(-4490.91,5396.34,-2153.09,0.616)
        pt3dadd(-4502.16,5405.52,-2152.1,0.616)
    }
    dend[228]{ 
        pt3dadd(-4502.16,5405.52,-2152.1,0.616)
        pt3dadd(-4510.05,5415.3,-2146.2,0.616)
        pt3dadd(-4510.45,5420.81,-2133.92,0.616)
    }
    dend[229]{
        pt3dadd(-4510.45,5420.81,-2133.92,0.616)
        pt3dadd(-4509.7,5435.98,-2126.03,0.616)
        pt3dadd(-4508.93,5456.37,-2106.5,0.616)
    }
    dend[230]{
        pt3dadd(-4508.93,5456.37,-2106.5,0.616)
        pt3dadd(-4532.34,5459.48,-2091.4,0.616)
        pt3dadd(-4542.7,5465.42,-2079.33,0.616)
    }
    dend[231]{
        pt3dadd(-4542.7,5465.42,-2079.33,0.616)
        pt3dadd(-4553.85,5467.25,-2065.83,0.616)
        pt3dadd(-4564.14,5469.94,-2046.31,0.616)
    }
    dend[232]{
        pt3dadd(-4564.14,5469.94,-2046.31,0.616)
        pt3dadd(-4572.56,5470.93,-2026.89,0.616)
        pt3dadd(-4572.24,5475.73,-2014.88,0.616)
    }
    //dend47
    dend[233]{
        pt3dadd(-4378.5,5243.76,-2219.14,1.6)
        pt3dadd(-4380.18,5243.63,-2214.66,0.92)
        pt3dadd(-4389.94,5250.8,-2203.65,0.92)
    }
    dend[234]{
        pt3dadd(-4389.94,5250.8,-2203.65,0.92)
        pt3dadd(-4398.06,5255.77,-2188.49,0.92)
        pt3dadd(-4409.57,5263.7,-2177.2,0.92)
        pt3dadd(-4412.94,5264.77,-2170.3,0.92)
    }
    dend[235]{
        pt3dadd(-4412.94,5264.77,-2170.3,0.92)
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    }
    //---------------------------------------------------------
    //dend48
    dend[240]{
        pt3dadd(-4372.52,5225.59,-2262.91,2)
      //pt3dadd(-1699.62 , -614.46    , 6.45    , 1.92)  
        pt3dadd(-4370.24,5233.69,-2276.69,1.6)
        pt3dadd(-4370.36,5231.46,-2281.19,1.6)
        pt3dadd(-4362.74,5226.7,-2284.11,1.6)
        pt3dadd(-4354.23,5222.55,-2294.81,1.6)
    }
    dend[241]{
        pt3dadd(-4354.23,5222.55,-2294.81,1.6)
        pt3dadd(-4337.38,5216.04,-2304.27,1.6)
        pt3dadd(-4325.71,5204.73,-2310.72,1.536)
        pt3dadd(-4313.8,5189.84,-2324.65,1.536)
        pt3dadd(-4302.52,5178.61,-2329.12,1.232)
    }
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    }
    //dend49
    dend[245]{
        pt3dadd(-4194.95,5026.17,-2356.15,0.92)
        pt3dadd(-4194.44,5017.4,-2351.14,0.616)
        pt3dadd(-4179.95,5009.27,-2351.73,0.616)
    }
    dend[246]{
        pt3dadd(-4179.95,5009.27,-2351.73,0.616)
        pt3dadd(-4170.35,5003.86,-2350,0.616)
        pt3dadd(-4164.44,4991.97,-2350.6,0.616)
    }
    dend[247]{
        pt3dadd(-4164.44,4991.97,-2350.6,0.616)
        pt3dadd(-4164.61,4986.5,-2353.65,0.616)
        pt3dadd(-4144.25,4972.34,-2347.37,0.616)
        pt3dadd(-4136.58,4955.17,-2341.99,0.616)
    }
    dend[248]{
        pt3dadd(-4136.58,4955.17,-2341.99,0.616)
        pt3dadd(-4132.45,4941.08,-2341.64,0.616)
        pt3dadd(-4132.92,4923.03,-2347.13,0.616)
        pt3dadd(-4133.47,4902.46,-2354.72,0.616)
    }
    dend[249]{
        pt3dadd(-4133.47,4902.46,-2354.72,0.616)
        pt3dadd(-4133.92,4898.2,-2366.79,0.616) //was 0.624
        pt3dadd(-4126.28,4893.66,-2368.48,0.616) //was 0.624
        pt3dadd(-4121.39,4889.9,-2369.88,0.616) //was 0.624
    }
    //dend50
    dend[250]{
        pt3dadd(-4194.95,5026.17,-2356.15,0.92)
        pt3dadd(-4190.51,5014.97,-2357.76,0.616)
        pt3dadd(-4175.93,5007.93,-2362.86,0.616)
    }
    //dend51
    dend[251]{
        pt3dadd(-4175.93,5007.93,-2362.86,0.616)
        pt3dadd(-4183.41,5000.52,-2362.58,0.616)
        pt3dadd(-4183.25,4996.86,-2365.47,0.616)
    }
    dend[252]{ 
        pt3dadd(-4183.25,4996.86,-2365.47,0.616)
        pt3dadd(-4180.58,4991.95,-2366.71,0.304)
        pt3dadd(-4167.25,4986.8,-2369.5,0.304)
    }
    dend[253]{
        pt3dadd(-4167.25,4986.8,-2369.5,0.304)
        pt3dadd(-4161.93,4986.92,-2376.06,0.304)
        pt3dadd(-4161.99,4989.32,-2381.78,0.304)
    }
    //dend52
    dend[254]{
        pt3dadd(-4175.93,5007.93,-2362.86,0.616)
        pt3dadd(-4182.4,5000.4,-2363.82,0.616)
    }
    dend[255]{
        pt3dadd(-4182.4,5000.4,-2363.82,0.616)
        pt3dadd(-4164.56,4997.87,-2371.45,0.616)
        pt3dadd(-4165.69,4992.1,-2370.46,0.616)
    }
    dend[256]{
        pt3dadd(-4165.69,4992.1,-2370.46,0.616)
        pt3dadd(-4165.86,4987.69,-2375.12,0.616)
        pt3dadd(-4166.19,4984.28,-2381.04,0.304)
    }
    dend[257]{
        pt3dadd(-4166.19,4984.28,-2381.04,0.304)
        pt3dadd(-4139.64,4969.11,-2387.46,0.304)
        pt3dadd(-4125.75,4951.03,-2393.95,0.304)
    }
    dend[258]{
        pt3dadd(-4125.75,4951.03,-2393.95,0.304)
        pt3dadd(-4113.38,4932.17,-2402.74,0.304)
        pt3dadd(-4104.47,4921.72,-2408.54,0.304)
    }
    dend[259]{
        pt3dadd(-4104.47,4921.72,-2408.54,0.304)
        pt3dadd(-4104.73,4912.67,-2412.93,0.304)
        pt3dadd(-4104.93,4904.71,-2415.11,0.304) //was 0.624
    }
    dend[260]{
        pt3dadd(-4104.93,4904.71,-2415.11,0.304) //was 0.624
        pt3dadd(-4104.94,4899.7,-2410.29,0.304) //was 0.624
        pt3dadd(-4105.29,4877,-2404.34,0.304) //was 0.624
    }
    //-----------------------------------------------------
    //dend53
    dend[261]{
        pt3dadd(-4371.69,5242.77,-2269.88,2)
     // pt3dadd(-1698.89 , -614.82  , -16.56    , 1.92)  
        pt3dadd(-4369.78,5240.45,-2259.41,1.536)
        pt3dadd(-4369.61,5245.82,-2256.02,1.232)
        pt3dadd(-4380.61,5248.61,-2251.31,1.232)
        pt3dadd(-4393.09,5248.55,-2236.53,1.232)
    }
    dend[262]{
        pt3dadd(-4393.09,5248.55,-2236.53,1.232)
        pt3dadd(-4398.65,5245.66,-2224.79,1.232)
        pt3dadd(-4409.83,5230.11,-2209.83,1.232)
        pt3dadd(-4413.94,5232.63,-2204.87,1.232)
        pt3dadd(-4414.03,5226.71,-2195.42,1.232)
    }
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    }
    //------------------------------------------------
    //dend54
    dend[272]{
        pt3dadd(-4371.69,5242.77,-2269.88,2)
      //pt3dadd(-1700.53 , -614.52    , 6.45    , 1.92) 
      //pt3dadd(-1707.09 , -619.17    , 6.45    , 1.92)  
        pt3dadd(-4372.84,5247.97,-2274.29,1.232)
        pt3dadd(-4386.3,5255.67,-2273.22,1.232)
    }
    dend[273]{
        pt3dadd(-4386.3,5255.67,-2273.22,1.232)
        pt3dadd(-4402.95,5258.7,-2265.11,1.232)
        pt3dadd(-4414.63,5265.16,-2261.63,1.232)
    }
    dend[274]{
        pt3dadd(-4414.63,5265.16,-2261.63,1.232)
        pt3dadd(-4418.03,5266.34,-2256.32,1.232)
        pt3dadd(-4417.64,5272.9,-2242.56,0.624)
    }
    dend[275]{
        pt3dadd(-4417.64,5272.9,-2242.56,0.624)
        pt3dadd(-4436.5,5289.08,-2233.25,0.624)
        pt3dadd(-4445.69,5304.83,-2232.02,0.624)
        pt3dadd(-4459.2,5322.71,-2228.79,0.624)
    }
    dend[276]{ 
        pt3dadd(-4459.2,5322.71,-2228.79,0.624)
        pt3dadd(-4472.72,5345.15,-2215.34,0.624)
        pt3dadd(-4480.44,5360.1,-2204.82,0.624)
    }

    //-----------------------------------------------
    //dend55
    dend[277]{
        pt3dadd(-4371.69,5242.77,-2269.88,2)
      //pt3dadd(-1701.68 , -614.65   , 23.89    , 1.54)  
      //pt3dadd(-1706.63 , -612.48   , 23.89    , 1.54)  
        pt3dadd(-4351.31,5244.22,-2263.69,1.232)
        pt3dadd(-4365.77,5247.32,-2255.98,1.232)
        pt3dadd(-4364.7,5250.98,-2249.91,1.232)
    }
    //dend56
    dend[278]{
        pt3dadd(-4364.7,5250.98,-2249.91,1.232)
        pt3dadd(-4371.88,5258.21,-2241.75,1.232)
    }
    dend[279]{
        pt3dadd(-4371.88,5258.21,-2241.75,1.232)
        pt3dadd(-4384.44,5263.23,-2236.29,0.92)
        pt3dadd(-4397.61,5269.74,-2226.68,0.92)
    }
    dend[280]{
        pt3dadd(-4397.61,5269.74,-2226.68,0.92)
        pt3dadd(-4406.43,5275.79,-2218.48,0.92)
        pt3dadd(-4414.59,5282.53,-2214.95,0.92)
    }
    //dend57
    dend[281]{
        pt3dadd(-4414.59,5282.53,-2214.95,0.92)
        pt3dadd(-4412.95,5294.33,-2210.28,0.92)
        pt3dadd(-4412.81,5301.83,-2210.88,0.304)
        pt3dadd(-4408.86,5309.04,-2211.41,0.304)
        pt3dadd(-4405.27,5311.03,-2217.73,0.304)
    }
    //dend58
    dend[282]{
        pt3dadd(-4405.27,5311.03,-2217.73,0.304)
        pt3dadd(-4404.06,5314.21,-2219.3,0.304)
        pt3dadd(-4404.14,5315.79,-2225.28,0.304)
    }
    //dend59
    dend[283]{
        pt3dadd(-4405.27,5311.03,-2217.73,0.304)
        pt3dadd(-4405.28,5308.03,-2222.93,0.304)
        pt3dadd(-4405.48,5302.6,-2227.97,0.304)
        pt3dadd(-4405.66,5298.49,-2233.46,0.304)
    }
    //dend60
    dend[284]{
        pt3dadd(-4414.59,5282.53,-2214.95,0.92)
        pt3dadd(-4410.16,5285.27,-2208.81,0.616)
        pt3dadd(-4415.3,5289.04,-2205.07,0.92)
    }
    //dend61
    dend[285]{
        pt3dadd(-4364.7,5250.98,-2249.91,1.232)
        pt3dadd(-4376.84,5254.29,-2244.2,0.92)
    }
    dend[286]{
        pt3dadd(-4376.84,5254.29,-2244.2,0.92)
        pt3dadd(-4404.46,5262.19,-2231.51,0.92)
        pt3dadd(-4410.07,5267.44,-2223.61,0.616)
    }
    dend[287]{
        pt3dadd(-4410.07,5267.44,-2223.61,0.616)
        pt3dadd(-4418.57,5267.63,-2216.12,0.616)
        pt3dadd(-4418.44,5268.38,-2209.77,0.616)
    }



    //length of axon 3267.7 um
    initseg[0]{
        pt3dadd(-4372.52,5225.59,-2262.91,2) 
        pt3dadd(-4369.7,5233.91,-2252.26,2) 
        pt3dadd(-4369.219971,5232.750000,-2237.025024,1.400000)
    }

    node[0]{
         pt3dadd(-4369.219971,5232.750000,-2237.025024,1.400000)
         pt3dadd(-4368.616693,5232.225686,-2236.424066,1.400000)
    }
    MYSA[0]{
         pt3dadd(-4368.616693,5232.225686,-2236.424066,1.400000)
         pt3dadd(-4367.711775,5231.439216,-2235.522629,1.400000)
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    }

}

endtemplate STN_morph_type1RD